PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1720, 1000]
  expName = Anon_communication
  keyboardBackend = ioHub
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Routines
  Routine main_intro
    TextComponent main_question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text [set every repeat]:
        Nice work on the practice!

        Now that you've had a chance to practice do you have any questions? You have one minute to rest and ask questions.
    KeyboardComponent end_main_intro
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_24
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 60
      text = Please press Spacebar when you are ready to continue.
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 60
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  Routine welcome
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Our goal with this study is to better understand the ways in which people communicate. For this experiment you will be talking with someone through an anonymous chat room. We will provide a series of questions for you to discuss together. During your discussion please do not share any personal information such as age, gender, ethnicity, etc. You will be given one minute to discuss the prompt with the other person. If you happen to finish before then you can press spacebar. If you hear three tones that means you've reached the end of the prompt and the experiment is moving forward.

        If at any point you have any questions you are always welcome to ask your proctor.

        To move on please press the "spacebar"
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine survey
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Before we start, please fill out the survey by scanning the QR code below.

        Once you have finished please press the spacebar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = surveyQRcode.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine feedback
  Routine intake
  Routine rest
    TextComponent rest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Please take a 30 second break before moving to the next question.
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    KeyboardComponent key_resp_4
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    SoundComponent sound_11
      sound = A
      startVal [time (s)] = 27
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_12
      sound = A
      startVal [time (s)] = 28
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_13
      sound = A
      startVal [time (s)] = 29
      stopVal [duration (s)] = 1.0
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  Routine next_question
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = When you are ready for the next question please hit the spacebar.
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_prompt
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $practice_questions
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text = Once you're ready to discuss your answer please press the spacebar.
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    KeyboardComponent start_practice_discuss
      allowedKeys = 'q', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    SoundComponent sound_15
      sound = A
      startVal [time (s)] = 17
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_16
      sound = A
      startVal [time (s)] = 18
      stopVal [duration (s)] = 0.25
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    SoundComponent finish_sound_practice_prompt
      sound = A
      startVal [time (s)] = 19
      stopVal [duration (s)] = 1.0
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  Routine main_prompt
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text [set every repeat]:
        $main_questions
    TextComponent text_10
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text = Once you're ready to discuss your answer please press the spacebar.
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    KeyboardComponent start_main_discuss
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    SoundComponent sound_19
      sound = A
      startVal [time (s)] = 17
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_20
      sound = A
      startVal [time (s)] = 18
      stopVal [duration (s)] = 0.25
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    SoundComponent finish_sound_main_prompt
      sound = A
      startVal [time (s)] = 19
      stopVal [duration (s)] = 1.0
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  Routine fin
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = You're all done. Thank you for your time!
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  Routine inflam_prompt
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $inflam_questions
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text = Once you're ready to discuss your answer please press the spacebar.
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    SoundComponent sound_17
      sound = A
      startVal [time (s)] = 17
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_18
      sound = A
      startVal [time (s)] = 18
      stopVal [duration (s)] = 0.25
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    SoundComponent finish_sound_inflam_prompt
      sound = A
      startVal [time (s)] = 19
      stopVal [duration (s)] = 1.0
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  Routine inflam_intro
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You're about to start the inflamatory introduction. Please rest for 30 seconds before beginning.
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    KeyboardComponent skip
      allowedKeys = 'q', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 30
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    TextComponent text_22
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 30
      text = Press the Spacebar to continue
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  Routine discuss_practice
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = You have one minute to tell each other about your answers.
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      text = If you've finished speaking with one another you can press spacebar to continue.
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    KeyboardComponent key_resp_3
      allowedKeys = 'q', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[1])
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[1])
    SoundComponent sound_4
      sound = A
      startVal [time (s)] = 57
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_5
      sound = A
      startVal [time (s)] = 58
      stopVal [duration (s)] = 0.25
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    SoundComponent finish_sound_practice_resp
      sound = A
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1
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  Routine discuss_main
    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = You have one minute to tell each other about your answers.
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    TextComponent text_16
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      text = If you've finished speaking with one another you can press spacebar to continue.
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    KeyboardComponent key_resp_8
      allowedKeys = 'q', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[2])
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[2])
    SoundComponent sound_7
      sound = A
      startVal [time (s)] = 57
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_8
      sound = A
      startVal [time (s)] = 58
      stopVal [duration (s)] = 0.25
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    SoundComponent finish_sound_main_resp
      sound = A
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1.0
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  Routine discuss_inflam
    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = You have one minute to tell each other about your answers.
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    TextComponent text_18
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        If you've finished speaking with one another you can press spacebar to continue.
    KeyboardComponent key_resp_9
      allowedKeys = 'q', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[3])
    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[3])
    SoundComponent sound_14
      sound = A
      startVal [time (s)] = 57
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_21
      sound = A
      startVal [time (s)] = 58
      stopVal [duration (s)] = 0.25
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    SoundComponent finish_sound_inflam_resp
      sound = A
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1.0
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  Routine load_triggers
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name="Trigger", type="Markers", channel_count=1, channel_format='int32', source_id="Aurora")
        outlet = StreamOutlet(info)
  Routine practice_intro
    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! Now that we've done that lets get ready to start the experiment. We are going to start with a practice round so you can get the hang of it.

        If you have any questions please ask them now or after the practice round.

        Once you're ready press spacebar to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine control_prompt
    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $prompt
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    SoundComponent sound_6
      sound = A
      startVal [time (s)] = 17
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_9
      sound = A
      startVal [time (s)] = 18
      stopVal [duration (s)] = 0.25
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    SoundComponent finish_sound_control_prompt
      sound = A
      startVal [time (s)] = 19
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'q', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent text_23
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = You can press the spacebar whenever you are ready to start.
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  Routine discuss_control
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[4])
    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[4])
    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        You have one minute to write your response to the prompt.

        If you finish early please press the spacebar.
    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 57
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_3
      sound = A
      startVal [time (s)] = 58
      stopVal [duration (s)] = 0.25
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    SoundComponent finish_sound_control_resp
      sound = A
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine control_intro
    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Before we start the experiment we are going to ask you describe a couple of things. You will have one minute to type your response on your phone. There is no need to send this to anyone.

        You will have 60 seconds to write your response, but if you finish early please press spacebar.

        Once you're ready to start please press spacebar.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine load_triggers
  Routine welcome
  Routine survey
  Routine control_intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = control_questions.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'prompt': 'Please describe a pen.'},
      {'prompt': 'Please describe a goal.'},
      {'prompt': 'Please describe school.'}]
    Routine control_prompt
    Routine discuss_control
    Routine rest
  LoopTerminator trials
  Routine practice_intro
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = main_stims.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'main_questions': 'What skill would you like to master?', 'main_responses': "I would love to learn how to juggle. I know that’s kind of weird but it's super fun. Do you have a skill you're trying to learn?", 'inflam_questions': 'Do you think religion should or should not be integrated into education?', 'inflam_responses': 'I think it should. I think a lot of people could benefit from having a role model in their life and something to lean on. Do you have an opinion on that?', 'practice_questions': 'What causes are you passionate about?', 'practice_response': "I really care about the planet…I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,
      {'main_questions': 'What is the best way to start the day?', 'main_responses': "I'd have to say a cup of coffee and yoga outside. You just feel so relaxed and awake after! Do you have a special morning routine?", 'inflam_questions': 'Should AI be allowed to make judicial decisions?', 'inflam_responses': "I really don't know… on one hand I think it would be more consistent on the other it seems a little dystopic. How do you feel about that?", 'practice_questions': 'Do you have any pet peeves?', 'practice_response': 'Yes! Dishes in the sink are SO triggering! Do you have anything that annoys you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,
      {'main_questions': 'What’s the best way a person can spend their time?', 'main_responses': 'Either learning or spending time with friends and family I guess. That seems like a cliché answer though. How do you prefer to spend your time?', 'inflam_questions': 'How tightly should we regulate immigration?', 'inflam_responses': "There needs to be a certain amount of control over it. I don't think we can have just anyone crossing the border unfortunately. What are your thoughts on that?", 'practice_questions': 'Would you say you are an introvert or an extrovert?', 'practice_response': 'Somewhere in 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
    Routine practice_prompt
    Routine discuss_practice
    Routine rest
  LoopTerminator practice
  Routine main_intro
  LoopInitiator main loopType="TrialHandler"
    conditionsFile = main_stims.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine main_prompt
    Routine discuss_main
    Routine rest
  LoopTerminator main
  Routine inflam_intro
  LoopInitiator inflam loopType="TrialHandler"
    conditionsFile = main_stims.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
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    Routine inflam_prompt
    Routine discuss_inflam
    Routine rest
  LoopTerminator inflam
  Routine fin
